opentrons/protocol-designer 4.0.2
schemaVersion: 3
protocolName: Covid-19  14 columns Gen2 Pipette
author: Jsolarte/Jsniffen
description: 5 ul sample to 15 uL master mix
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p300_multi_gen2: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  CFX plate: {definitionId: custom_beta/hardshellbioradpcr_384_wellplate_50ul/1, slot: 3}
  Samples Plate: {definitionId: custom_beta/thermofisherscientificelutiontubes_96_wellplate_650ul/1, slot: 1}
  Control Plate: {definitionId: custom_beta/thermofisherscientificelutiontubes_96_wellplate_650ul/1, slot: 2}
  Sample Plate 2: {definitionId: custom_beta/thermofisherscientificelutiontubes_96_wellplate_650ul/1, slot: 4}
  Opentrons 96 Filter Tip Rack 20 µL (slot 10): {definitionId: opentrons/opentrons_96_filtertiprack_20ul/1, slot: 10}
  Opentrons 96 Filter Tip Rack 20 µL (slot 7): {definitionId: opentrons/opentrons_96_filtertiprack_20ul/1, slot: 7}
  Opentrons 96 Filter Tip Rack 20 µL (slot 11): {definitionId: opentrons/opentrons_96_filtertiprack_20ul/1, slot: 11}
  Opentrons 96 Filter Tip Rack 20 µL (slot 8): {definitionId: opentrons/opentrons_96_filtertiprack_20ul/1, slot: 8}
pipetteTiprackAssignments:
  p300_multi_gen2: opentrons/opentrons_96_filtertiprack_20ul/1
ingredients:
  - Control 1: {description: Covid-19 control set 1}
  - Control 2: {description: covid-19 control set 2}
  - Master mix 1: {description: Covid-19 Master mix 1}
  - Master mix 2: {description: Covid-19 Master mix 2}
  - Master mix 3: {description: Covid-19 Master mix 3}
  - Covid-19 samples: {description:  covid-19 samples}
  - COVID-19 samples 2
ingredLocations:
  CFX plate:
    Master mix 1 {volume: 15}: A1-P1, A2-P2, A3-P3, A4-P4, A5-P5, A6-P6, N8, P8, A7-P7
    Master mix 2 {volume: 15}: A9-P9, A10-P10, A11-P11, A12-P12, A13-P13, A14-P14, N16, P16, A15-P15
    Master mix 3 {volume: 15}: A17-P17, A18-P18, A19-P19, A20-P20, A21-P21, A22-P22, N24, P24, A23-P23
  Samples Plate:
    Covid-19 samples {volume: 80}: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
  Control Plate:
    Control 1 {volume: 80}: G1, H1
    Control 2 {volume: 80}: G3, H3
  Sample Plate 2:
    COVID-19 samples 2 {volume: 80}: A1-H1, A2-H2
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Samples Plate
  aspirate_wells: A1-A12
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  aspirate_mmFromBottom: 1
  dispense_labware: CFX plate
  dispense_wells: A1, B1, A2, B2, A3, B3, A4, B4, A5, B5, A6, B6
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 4
  dispense_mmFromBottom: 5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Sample Plate 2
  aspirate_wells: A1, A2
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  aspirate_mmFromBottom: 1
  dispense_labware: CFX plate
  dispense_wells: A7, B7
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 4
  dispense_mmFromBottom: 5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Samples Plate
  aspirate_wells: A1-A12
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  aspirate_mmFromBottom: 1
  dispense_labware: CFX plate
  dispense_wells: A9, B9, A10, B10, A11, B11, A12, B12, A13, B13, A14, B14
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 4
  dispense_mmFromBottom: 5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Sample Plate 2
  aspirate_wells: A1, A2
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  aspirate_mmFromBottom: 1
  dispense_labware: CFX plate
  dispense_wells: A15, B15
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 4
  dispense_mmFromBottom: 5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Samples Plate
  aspirate_wells: A1-A12
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  aspirate_mmFromBottom: 1
  dispense_labware: CFX plate
  dispense_wells: A17, B17, A18, B18, A19, B19, A20, B20, A21, B21, A22, B22
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 4
  dispense_mmFromBottom: 5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Sample Plate 2
  aspirate_wells: A1, A2
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  aspirate_mmFromBottom: 1
  dispense_labware: CFX plate
  dispense_wells: A23, B23
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 4
  dispense_mmFromBottom: 5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Control Plate
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: CFX plate
  dispense_wells: B8, B16
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 4
  dispense_mmFromBottom: 5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Control Plate
  aspirate_wells: A3
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  aspirate_mmFromBottom: 1
  dispense_labware: CFX plate
  dispense_wells: B24
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 4
  dispense_mmFromBottom: 5
  blowout_checkbox: true
  blowout_location: dest_well
labwareDefinitions:
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  custom_beta/hardshellbioradpcr_384_wellplate_50ul/1:
    brand: {brand: Hard-Shell Bio-Rad PCR, brandId: [HSR-4xxx]}
    metadata: {displayName: Hard-Shell Bio-Rad PCR 384 Well Plate 50 µL, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.76, yDimension: 85.48, zDimension: 10.4}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: hardshellbioradpcr_384_wellplate_50ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 9.35, totalLiquidVolume: 50, shape: circular, diameter: 3.1, x: 12.13, y: 76.49, z: 1.05}
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  custom_beta/thermofisherscientificelutiontubes_96_wellplate_650ul/1:
    brand: {brand: Thermo Fisher Scientific Elution Tubes, brandId: [AB-1404/B]}
    metadata: {displayName: Thermo Fisher Scientific Elution Tubes 96 Well Plate 650 µL, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.76, yDimension: 85.48, zDimension: 31.5}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: thermofisherscientificelutiontubes_96_wellplate_650ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 28.14, totalLiquidVolume: 650, shape: circular, diameter: 7.1, x: 14.83, y: 74.24, z: 3.36}
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commands:
- pickUpTip: {pipette: p300_multi_gen2, labware: Opentrons 96 Filter Tip Rack 20 µL (slot 7), well: A1}
- aspirate: {pipette: p300_multi_gen2, volume: 5, labware: Samples Plate, well: A1, offsetFromBottomMm: 1, flowRate: 94}
- dispense: {pipette: p300_multi_gen2, volume: 5, labware: CFX plate, well: A1, offsetFromBottomMm: 5, flowRate: 94}
- aspirate: {pipette: p300_multi_gen2, volume: 4, labware: CFX plate, well: A1, offsetFromBottomMm: 5, flowRate: 94}
- dispense: {pipette: p300_multi_gen2, volume: 4, labware: CFX plate, well: A1, offsetFromBottomMm: 5, flowRate: 94}
- aspirate: {pipette: p300_multi_gen2, volume: 4, labware: CFX plate, well: A1, offsetFromBottomMm: 5, flowRate: 94}
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